PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = https://www.surveymonkey.com/r/BVGP2P7
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Word Fluency Task
  exportHTML = manually
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Routines
  Routine Instructions
    ImageComponent instructions
      image [set every repeat] = $INS
      size = (1280,720)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent spacebar0
      allowedKeys = 'space','y','n','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_JS
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if 'n' in keys:
            core.quit()  # So you can quit
  Routine Trial
    TextComponent fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent timer
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text [set every frame] = $timerText
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    TextComponent instruct_text
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text = Type as many items as possible that belong to the following category. Press "ENTER" after each item you type. 
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    TextComponent letter_text
      letterHeight = 0.05
      pos = (0, 0.28)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      text [set every repeat] = $Category
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    TextComponent screen_text
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    TextComponent list_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    TextComponent list_text2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    TextComponent list_text3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    TextComponent list_text4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    TextComponent list_text5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    CodeComponent displayText
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase) #makes a list of alphabet characters
      Begin JS Experiment:
        allLetters = "abcdefghijklmnopqrstuvwxyz".split('');
      Begin JS Routine:
        event.clearEvents();
        TrialClock.reset();
        textFill = "";
        list_text1.setText("");
        list_text1.pos = [(- 0.6), 0.15];
        list_text2.setText("");
        list_text2.pos = [(- 0.3), 0.15];
        list_text3.setText("");
        list_text3.pos = [0, 0.15];
        list_text4.setText("");
        list_text4.pos = [0.3, 0.15];
        list_text5.setText("");
        list_text5.pos = [0.6, 0.15];
        textController = [list_text1, list_text2, list_text3, list_text4, list_text5];
        textIndex = 0;
        entryCount = 0;
        words_rt = [];
        letter_text.bold = true;
      Begin Routine:
        # make sure no previous keypresses are used in the word
        event.clearEvents()
        #reset the routine Trial's clock
        TrialClock.reset()
        # create empty strings for each of our word lists
        textFill = ''
        list_text1.setText('')
        list_text1.pos = [-.6, .15]

        list_text2.setText('')
        list_text2.pos = [-.3, .15]

        list_text3.setText('')
        list_text3.pos = [0, .15]

        list_text4.setText('')
        list_text4.pos = [.3, .15]

        list_text5.setText('')
        list_text5.pos = [.6, .15]

        textController = [list_text1, list_text2, list_text3, list_text4, list_text5]
        textIndex = 0
        entryCount = 0

        words_rt = []

        letter_text.bold = True
      Each Frame:
        timerText= str(round(routineTimer.getTime()))
        keys = event.getKeys()
        t = TrialClock.getTime()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'right':
                    continueRoutine = False
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                screen_text.setText(textFill)  # Set new text on screen

                if keys[0] == 'return':
                    # Set text input
                    column = textController[textIndex]
                    column_text = column.text + '\n' + screen_text.text
                    textFill = ''
                    screen_text.setText(textFill)
                    column.setPos([column.pos[0], column.pos[1] - (.0284)])
                    entryCount += 1
                    if entryCount >= 10:
                        entryCount = 0
                        textIndex += 1
                        if textIndex >= len(textController):
                            routineTimer.reset()
                            continueRoutine = False
                    words_rt.append(t)
                    column.setText(column_text)
      Each JS Frame:
        timerText= Math.round(routineTimer.getTime()).toString()

        keys = psychoJS.eventManager.getKeys();
        if (keys.indexOf('escape') > -1) {
            psychoJS.experiment.experimentEnded = true;
        } else {
            if (keys) {
                if ((keys[0] === "space")) {
                    textFill += " ";
                } else {
                    if ((keys[0] === "right")) {
                        continueRoutine = false;
                    } else {
                        if ((keys[0] === "backspace")) {
                            textFill = textFill.slice(0, (- 1));
                        } else {
                            if (allLetters.indexOf(keys[0]) > -1) {
                                textFill += keys[0];
                            }
                        }
                    }
                }
                screen_text.setText(textFill);
                if ((keys[0] === "return")) {
                    let column = textController[textIndex];
                    let column_text = ((column.text + "\n") + screen_text.text);
                    textFill = "";
                    screen_text.setText(textFill);
                    column.setPos([column.pos[0], (column.pos[1] - 0.0284)]);
                    entryCount += 1;
                    if ((entryCount >= 10)) {
                        entryCount = 0;
                        textIndex += 1;
                        if ((textIndex >= textController.length)) {
                            routineTimer.reset();
                            continueRoutine = false;
                        }
                    }
                    words_rt.append(t);
                    column.setText(column_text);
                }
            }
        }
      End JS Routine:
        word_strings = [list_text1, list_text2, list_text3, list_text4, list_text5];
        all_words = [];

        for (var this_word_string of word_strings)
           all_words= all_words.concat(this_word_string.text.trim().split('\n'))

        let num= 1
        for (var ws of all_words)
        {
            if (ws.length > 0)
            {
               psychoJS.experiment.addData("word" + num.toString(), ws)
               num= num + 1
            }
        }

        let i= 1
        for (var time of words_rt)
        {
            if (time.length > 0)
            {
               psychoJS.experiment.addData("rt_" + num.toString(), time)
               i= i + 1
            }
        }

        routineTimer.reset();
      End Routine:
        word_strings = [list_text1, list_text2, list_text3, list_text4, list_text5]
        all_words = []
        for this_word_string in word_strings:
            all_words.extend(this_word_string.text.strip().split('\n'))

        num= 1
        for ws in all_words:
            thisExp.addData("word" + str(num), ws)
            num= num + 1
            #thisExp.addData("word{:03.0f}".format(index), this_word)

        i = 1
        for time in words_rt:
            thisExp.addData('rt_' + str(i), time)
            i = i + 1

        routineTimer.reset()
  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine Difficulty
    TextComponent fixation_1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent difficulty_question
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      text = How difficult was it to think of items for this category? 
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    TextComponent options
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      text = 1       2       3       4       5       6       7
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    TextComponent anchor_1
      letterHeight = 0.04
      pos = (-0.4, -0.20)
      saveStartStop = False
      startVal [time (s)] = 1
      text = Not difficult at all
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    TextComponent anchor_2
      letterHeight = 0.04
      pos = (0.4, -0.20)
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        Very Difficult
    KeyboardComponent key_resp_diff
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Strategy
    TextComponent text_other
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How did you go about thinking of items for this category? Type in one or two sentences and then press ENTER.
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents()
        allLetters = "abcdefghijklmnopqrstuvwxyz".split('');
        modify = false;
        text.text = "";
      Begin Routine:
        # make sure no previous keypresses are used in the word
        event.clearEvents()

        import string
        allLetters = list(string.ascii_lowercase) #makes a list of alphabet characters

        modify = False
        text.text = ''
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'comma' in keys:
                text.text =  text.text + ','
            elif 'period' in keys:
                text.text = text.text + '.'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            elif 'escape' in keys:
                core.quit()  # So you can quit
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("Strategy_resp", text.text);
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('Strategy_resp', text.text)
Flow
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('INS', 'Slide1.png'), ('KEYS', ['space'])]),
      OrderedDict([('INS', 'Consent.png'), ('KEYS', ['y', 'n'])]),
      OrderedDict([('INS', 'Slide2.png'), ('KEYS', ['space'])]),
      OrderedDict([('INS', 'Slide3.png'), ('KEYS', ['space'])]),
      OrderedDict([('INS', 'Slide4.png'), ('KEYS', ['space'])]),
      OrderedDict([('INS', 'Slide5.png'), ('KEYS', ['space'])]),
      OrderedDict([('INS', 'Slide6.png'), ('KEYS', ['g'])])]
    Routine Instructions
  LoopTerminator instructions_loop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Category', 'Things in a garage'), ('Type', 'Spatial')]),
      OrderedDict([('Category', 'Things in a bedroom'), ('Type', 'Spatial')]),
      OrderedDict([('Category', 'Things in a kitchen'), ('Type', 'Spatial')]),
      OrderedDict([('Category', 'Words that start with F'), ('Type', 'Phonemic')]),
      OrderedDict([('Category', 'Words that start with A'), ('Type', 'Phonemic')]),
      OrderedDict([('Category', 'Words that start with S'), ('Type', 'Phonemic')]),
      OrderedDict([('Category', 'Animals'), ('Type', 'Semantic')]),
      OrderedDict([('Category', 'Occupations'), ('Type', 'Semantic')]),
      OrderedDict([('Category', 'Sports'), ('Type', 'Semantic')])]
    Routine Trial
    Routine Difficulty
    Routine Strategy
  LoopTerminator trials
  Routine End
